PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = func_loc
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine exp_setup
    CodeComponent set_up
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        #add counterbalance and match/mismatch keys
        participant_id = expInfo['participant']
        last_three_digits = int(participant_id[-3:])


        if last_three_digits % 2 == 0:
            match_key = '1'
            mismatch_key = '2'
            instr_message = "Vous verrez une image, puis un écran blanc, puis un mot. Appuyez sur '1' si le mot correspond à l’image, et sur '2' s’il ne correspond pas. Appuyez sur la barre d’espace pour commencer."
        else :
            match_key = '2'
            mismatch_key = '1'
            instr_message = "Vous verrez une image, puis un écran blanc, puis un mot. Appuyez sur '2' si le mot correspond à l’image, et sur '1' s’il ne correspond pas. Appuyez sur la barre d’espace pour commencer."


        allowed_keys_list = [match_key, mismatch_key]

        # Store these for later use in routines
        expInfo['match_key'] = match_key
        expInfo['mismatch_key'] = mismatch_key
        expInfo['allowed_keys_list'] = allowed_keys_list

        #open condition file to create list of match per trials
        import pandas as pd

        condition_path = f"func_loc_conditions/localizer_conditions_{last_three_digits}.csv"

        df_condition = pd.read_csv(condition_path)

        if last_three_digits % 2 == 0:
            df_condition['corrAns'] = df_condition['is_match'].map({'match': 1, 'mismatch': 2})
        else:
            df_condition['corrAns'] = df_condition['is_match'].map({'match': 2, 'mismatch': 1})

        df_condition.to_csv(condition_path, index=False)

        #add trials counter for break

        trials_counter= 0
    CodeComponent init_eeg
      Code Type = Auto->JS
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      Begin Experiment:
        # EEG
        import struct
        import serial
        import time
        # Trigger box Plus COM port
        adress = 'COM17'
        def init_port(adress):
            port = serial.Serial(adress, baudrate=2000000)
            time.sleep(1) # Wait to make sure it's open
            return port

        def write_port(port, pin):
            """
            Turn on one of the ditigal pin
            pin: integer in range 2-13
            """
            # Convert to string
            string = b'' + struct.pack('!B', pin)
            # Write
            port.write(string)

        port = init_port(adress)
        port.write([0x00])

        # Init EEG
        from psychopy.hardware import brainproducts
        rcs = brainproducts.RemoteControlServer(host='192.168.1.2',timeout=5)

        rcs.openRecorder()
        time.sleep(2)
        rcs.workspace = 'C:/Users/labmp-eeg/Desktop/antoine_cognitivemaps/antoine_cognitivemaps.rwksp'
        rcs.participant = expInfo['participant'] + '_' + expInfo['date']
        rcs.expName = 'cmapsfuncloc'
        time.sleep(5)
        rcs.mode = 'monitor'
        time.sleep(2)
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $instr_message
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eeg_start
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    TextComponent eeg_text_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Vérifier eeg
    KeyboardComponent eeg_start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_eeg_2
      Code Type = Auto->JS
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      Begin Routine:
        rec_start = core.monotonicClock.getTime()
        rcs.startRecording()
  Routine image_load
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    TextComponent cross_5ms
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    StaticComponent preload_current_image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fixation_routine
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        image_display_dur = 1.0
        word_display_duration = 1.0
        total_response_time_allowed = 2.0

        trials_counter = trials_counter + 1
    TextComponent fixation
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent eeg_fix
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if fixation.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x01') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
  Routine trials_image
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    CodeComponent eeg_image
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if stim_image.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x04') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent photo_sensor
      Code Type = Auto->JS
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      Begin Routine:
        photodiode_box = visual.Rect(
            win=win,
            width=18,
            height=25,
            fillColor='white',
            lineColor='white',
            pos=(-win.size[0]/2 + 25, -win.size[1]/2 + 25),
            units='pix',
            autoDraw=False
        )
      Each Frame:
        if stim_image.status == STARTED:
            photodiode_box.autoDraw = True
        else:
            photodiode_box.autoDraw = False
      End Routine:
        photodiode_box.autoDraw = False
    ImageComponent stim_image
      image = $image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_display_dur
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  Routine trials_word
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    CodeComponent eeg_word
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if stim_word.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x10') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    TextComponent stim_word
      letterHeight = 0.10
      startVal [time (s)] =  0
      stopVal [duration (s)] = $word_display_duration
      text = $presented_word
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  Routine blank
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    CodeComponent eeg_blank
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if blank_interval.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x02') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent random_jitter
      Code Type = Auto->JS
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      Begin Routine:
        import random
        randomizer = random.randint(0, 10)

        time_of_blank = 1.0 + (randomizer/10)
    TextComponent blank_interval
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_of_blank
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  Routine resp
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    CodeComponent eeg_resp
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if text.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x08') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent eeg_resp_2
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if text.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x08') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent timer
      Code Type = Auto->JS
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      Each Frame:
        t = routineTimer.getTime()
        if t > key_resp.tStart + total_response_time_allowed and not key_resp.keys:
            key_resp.corr = 0
            thisExp.addData('timeout', 1)
            continueRoutine = False
    CodeComponent save_data
      Code Type = Auto->JS
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      End Routine:
        # Store data
        thisExp.addData('image_presented', image_file)
        thisExp.addData('word_presented', presented_word)
        thisExp.addData('is_match_condition', is_match) # from conditions file

        if key_resp.keys:
            thisExp.addData('response_given', key_resp.keys[0])
            thisExp.addData('response_correct', key_resp.corr)
            thisExp.addData('response_rt', key_resp.rt)
        else: # Timeout
            thisExp.addData('response_given', None)
            thisExp.addData('response_correct', 0) # Mark as incorrect or a specific timeout code
            thisExp.addData('response_rt', None)

        # Determine feedback message
        feedback_message = ""
        show_feedback_flag = False

        if not key_resp.keys: # Timeout
            feedback_message = "Délai de réponse dépassé. Veuillez répondre rapidement."
            show_feedback_flag = True
        elif not key_resp.corr: # Incorrect response
            feedback_message = "Mauvaise réponse"
            show_feedback_flag = True
        # else: correct response, no feedback_message, show_feedback_flag remains False

        # To be used in the feedback routine
        thisExp.addData('feedback_message_to_show', feedback_message)
        thisExp.addData('show_feedback_flag_value', show_feedback_flag)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $total_response_time_allowed
      text [set every repeat] = $f"Indiquer si le mot correspond à l'image précédente à l'aide de {allowed_keys_list}"
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  Routine feedback_routine
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    TextComponent feedback_text_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_message
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        #skip feedback if right answer
        if not show_feedback_flag:
            continueRoutine = False
  Routine iti_routine
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    TextComponent iti_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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  Routine break_2
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    CodeComponent break_code
      Code Type = Auto->JS
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      Begin Routine:
        if trials_counter in [72, 144, 216, 288,360]:
            continueRoutine = True
        else:
            continueRoutine = False
    TextComponent timer_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vous pouvez prendre une pause.

        Appuyer sur la barre espace pour continuer
    KeyboardComponent finish_time
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text =  La première partie de l’expérience est terminée.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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Flow
  Routine exp_setup
  Routine eeg_start
  LoopInitiator inside_loop_trials loopType="TrialHandler"
    conditionsFile = $condition_path
    loopType = random
    nReps = 1
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    Routine image_load
    Routine fixation_routine
    Routine trials_image
    Routine trials_word
    Routine blank
    Routine resp
    Routine feedback_routine
    Routine iti_routine
    Routine break_2
  LoopTerminator inside_loop_trials
  Routine end
